<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.4+2bab12753e452fa02540eb20e93664d41b112590"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai">
        <PortName>COM5</PortName>
        <StartExperimentSubjectName>StartExperiment</StartExperimentSubjectName>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>Timestamp</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpTimestampSource</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Valve+Speaker</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
          <beh:OutputPulseEnable>DOPort0 SupplyPort0 SupplyPort1 DO1 DO2</beh:OutputPulseEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>