WorkflowBuilder(Version=2.8.1)
AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=JSON, Directory=..\local\Subjects, DataSchema=bci_no_movement_session.json)
-> AsyncSubject SubjectSchemaPath

AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=JSON, Directory=..\local\Rigs, DataSchema=bci_no_movement_rig.json)
-> AsyncSubject RigSchemaPath

AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=JSON, Directory=..\local\TaskLogic, DataSchema=bci_no_movement_task_logic.json)
-> AsyncSubject TaskLogicSchemaPath

GroupWorkflow SessionStartTrigger
    SubscribeSubject TaskRunningState
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject StartLogging
    -> Delay(DueTime=PT2S)
    -> ReplaySubject StartExperiment(BufferSize=nil)
    -> Take(Count=1) => #5
    SubscribeSubject TaskRunningState
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #9
    #5, #9 -> Concat
    -> Take(Count=2)
    -> Last
    -> Unit
    -> MulticastSubject EndExperiment
    -> WorkflowOutput

GroupWorkflow Settings
    SubscribeSubject SubjectSchemaPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=..\local\Subjects\bci_no_movement_session.json)
    -> BciNoMovementDataSchema.Session.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.Session.BciNoMovementSession>)
    -> Take(Count=1)
    -> BehaviorSubject SubjectSchema

    SubscribeSubject RigSchemaPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=..\local\Rigs\bci_no_movement_rig.json)
    -> BciNoMovementDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.Rig.BciNoMovementRig>)
    -> Take(Count=1)
    -> BehaviorSubject RigSchema

    SubscribeSubject TaskLogicSchemaPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=..\local\TaskLogic\bci_no_movement_task_logic.json)
    -> BciNoMovementDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.TaskLogic.BciNoMovementTaskLogic>)
    -> Take(Count=1)
    -> BehaviorSubject TaskLogicSchema

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:/Data/, Subject=test-subject, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=BciControl.BaselineThreshold)
    -> BehaviorSubject BciBaselineThreshold

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=NoMovementControl.BaselineThreshold)
    -> BehaviorSubject NoMovementBaselineThreshold

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=BciControl.Gain)
    -> BehaviorSubject BciGain

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=NoMovementControl.Gain)
    -> BehaviorSubject PassiveGain

    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RngSeed) => #36
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1000000)
    -> Bonsai.Numerics.Distributions.Sample => #39
    #36, #39 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform RandomizeRng?
      Expression: Item1 == 0 ? Item1 : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=0)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

GroupWorkflow ZMQ
    SubscribeSubject SoftwareEvent
    -> AllenNeuralDynamics.Core.Logging.SerializeToJson => #1
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Networking.ZmqPublisher)
    -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #4
    #1, #4 -> Bonsai.ZeroMQ.Publisher(ConnectionString=@tcp://localhost:5556, Topic=bci-no-movement)
    -> WorkflowOutput

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Networking.ZmqSubscriber)
    -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic))
    -> Bonsai.ZeroMQ.Subscriber(ConnectionString=@tcp://localhost:5557, Topic=bci-no-movement)
    -> MemberSelector(Selector=Last)
    -> Bonsai.ZeroMQ.ConvertToString

GroupWorkflow Validation
    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> Take(Count=1)
    -> AsyncSubject Repository
    -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
    -> BitwiseNot => #4
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=AllowDirty)
    -> BitwiseNot => #7
    #4, #7 -> Zip
    -> BitwiseAnd
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Discard or stash changes first.")

    SubscribeSubject RigSchema
    -> Condition BothHasValue
        WorkflowInput Source1
        -> MemberSelector(Selector="Camera1,Camera0")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it.Item1 == null) or (it.Item2 == null)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector="Camera0.FrameRate,Camera1.FrameRate")
    -> Equal
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera frame rates must match!")

    SubscribeSubject RigSchema
    -> MemberSelector(Selector="Camera0.FrameRate,Camera0.Exposure")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ((1.0 / Item1) * 1000000) < Item2 + 500
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera0 Fps and Exposure not compatible.")

    SubscribeSubject RigSchema
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Camera1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == Null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector="Camera0.FrameRate,Camera1.Exposure")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ((1.0 / Item1) * 1000000) < Item2 + 500
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera1 Fps and Exposure not compatible.")

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=ZaberManipulator.GenericCommands)
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Count)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Merge
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Device)
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
          Expression: it == null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Device)
    -> Equal(Operand=DoubleProperty(Value=1))
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Only Zaber device index 1 is allowed for messages")

GroupWorkflow Init
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent

    BooleanProperty(Value=false)
    -> BehaviorSubject TaskRunningState

Annotation PinOut
  Text:
    - DO0 -> Cameras
    - DO1 -> Speaker
    - DO2 -> MicroscopeStart
    - DO3 -> MicroscopeStop
    - SUPPLY1 -> Valve
    - DIPort1 -> Lickometer
    - DI0 -> MicroscopeArmed
    - Manipulator steps DIO0
-> GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        Annotation PinOut
          Text:
            | Function | HarpBehavior Pin | Notes |
            | --- | ----------- | ----------- |
            | Camera Trigger | DO0 |  |
            | Water Valve | Port0 Supply |  Use a poke breakout |
            | Lickometer | Port0 DI |  Use a poke breakout |
            | Encoder B | Port2 DIO | Use a poke breakout |
            | Encoder A | Port2 DI | Use a poke breakout |
            | Thermistor | ADC0 |  |
            | Pressure Sensor | ADC1 |  |
            | Photodiode | DI3 |  |
            | Servo Motor | DO2 |  |
            | Audio Buzzer | DO1 |  |
        -> GroupWorkflow HarpBehavior
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpBehaviorCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpBehaviorBoard.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
            -> PublishSubject HarpBehaviorEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
            -> PublishSubject HarpBehaviorHeartBeat

            SubscribeSubject HarpBehaviorHeartBeat => #8
            SubscribeSubject StartExperiment => #9
            #8, #9 -> Zip => #10
            Annotation ForceRegisterDump(Text="") => #11
            #10, #11 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> PublishSubject HarpTimestampSource

            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0 Camera1"))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            GroupWorkflow CameraControl
                SubscribeSubject HarpBehaviorHeartBeat
                -> Take(Count=1)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
                -> MulticastSubject HarpBehaviorCommands

            GroupWorkflow WaterValve
                SubscribeSubject HarpBehaviorHeartBeat => #0
                Annotation Valve+Speaker(Text="") => #1
                #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="SupplyPort0 SupplyPort1 DO1 DO2 DO3"))
                -> Take(Count=1)
                -> MulticastSubject HarpBehaviorCommands

                BehaviorSubject<System.Double> ValveOpenTimeMs
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1)
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject TaskLogicSchema
                -> MemberSelector(Selector=ValveOpenTime)
                -> Multiply(Operand=DoubleProperty(Value=1000))
                -> MulticastSubject ValveOpenTimeMs

                BehaviorSubject<System.Reactive.Unit> TriggerValve
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
                -> MulticastSubject HarpBehaviorCommands
                -> WorkflowOutput

            GroupWorkflow Lickometer
                SubscribeSubject HarpBehaviorEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #2
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> DistinctUntilChanged => #6
                #6, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Seconds)
                -> PublishSubject LickEvent
                -> WorkflowOutput

                SubscribeSubject HarpBehaviorEvents
                -> Take(Count=1)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=1))
                -> MulticastSubject HarpBehaviorCommands

            GroupWorkflow Adc
                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
                -> PublishSubject AnalogData

                SubscribeSubject AnalogData
                -> MemberSelector(Selector="Value.AnalogInput0,Seconds")
                -> Bonsai.Harp.CreateTimestamped
                -> PublishSubject BciSignal

            GroupWorkflow ManipulatorInput
                SubscribeSubject HarpBehaviorEvents

                SubscribeSubject HarpBehaviorEvents
                -> Take(Count=1)
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePortDIODirectionPayload(PortDIODirection=None))
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent) => #6
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO0))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> DistinctUntilChanged => #10
                #10, #6 -> WithLatestFrom
                -> MemberSelector(Selector="Item1,Item2.Seconds")
                -> Bonsai.Harp.CreateTimestamped
                -> BehaviorSubject MotorDigitalInputState

            GroupWorkflow 2pHandShake => #28
                ExternalizedMapping(Value(DisplayName=PulseDurationMs))
                -> IntProperty(Value=10)
                -> Take(Count=1) => #2
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2) => #3
                #2 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO3) => #4
                #3, #4 -> Merge
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject HarpBehaviorEvents
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #8
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> DistinctUntilChanged => #12
                #12, #8 -> WithLatestFrom
                -> MemberSelector(Selector="Item1,Item2.Seconds")
                -> Bonsai.Harp.CreateTimestamped
                -> BehaviorSubject MicroscopeArmed

                BehaviorSubject<System.Reactive.Unit> MicroscopeStart
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
                -> MulticastSubject HarpBehaviorCommands

                BehaviorSubject<System.Reactive.Unit> MicroscopeStop
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
                -> MulticastSubject HarpBehaviorCommands
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Skip2pHandshake)
            -> BitwiseNot
            -> Condition => #32
                WorkflowInput Source1
                -> WorkflowOutput
            #28, #32 -> SubscribeWhen

            GroupWorkflow Buzzer
                BehaviorSubject<System.Int32> AudioTrigger => #0
                Annotation TrialStart(Text="") => #1
                #0, #1 -> IncludeWorkflow(Path=Extensions\TriggerTone.bonsai, ToneId=1, Frequency=500, DurationMs=100) => #2
                Annotation Reward(Text="") => #3
                #0, #3 -> IncludeWorkflow(Path=Extensions\TriggerTone.bonsai, ToneId=2, Frequency=100, DurationMs=20) => #4
                #2, #4 -> Merge
                -> WorkflowOutput

                GroupWorkflow InitialSettings => #7
                    SubscribeSubject HarpBehaviorHeartBeat
                    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
                    -> Take(Count=1)
                    -> MulticastSubject HarpBehaviorCommands
                SubscribeSubject HarpBehaviorHeartBeat
                -> Take(Count=1) => #9
                #7, #9 -> SubscribeWhen

        Annotation(Text="")
        -> GroupWorkflow HarpLoadCells
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpLoadCellsCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpLoadCellsBoard.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.LoadCells.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7)
            -> PublishSubject HarpLoadCellsEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
            -> PublishSubject HarpLoadCellsHeartBeat

            SubscribeSubject HarpLoadCellsHeartBeat => #8
            SubscribeSubject StartExperiment => #9
            #8, #9 -> Zip => #10
            Annotation ForceRegisterDump(Text="") => #11
            #10, #11 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateEnableEventsPayload(EnableEvents="LoadCellData DigitalInput SyncOutput"))
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateAcquisitionStatePayload(AcquisitionState=Enabled))
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject HarpLoadCellsEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=33, PayloadType=TimestampedS16, IsArray=true))
            -> PublishSubject LoadCellsData

            IntProperty(Value=0) => #27
            IntProperty(Value=0) => #28
            #27, #28 -> Zip

            BehaviorSubject<System.Tuple(System.Int32,System.Int32)> OffsetLoadCellChannel
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1  as Channel, Item2 as Offset)
            -> Condition => #32
                WorkflowInput Source1
                -> MemberSelector(Selector=Channel)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (it > 0) and (it < 8)
                -> WorkflowOutput
            -> MemberSelector(Selector=Channel)
            -> Bonsai.Scripting.Expressions.ExpressionTransform GetRegisterNumber => #34
              Expression: it + 48
            #32 -> MemberSelector(Selector=Offset)
            -> Bonsai.Dsp.Rescale(Min=-255, Max=255, RangeMin=255, RangeMax=255, RescaleType=Clamp) => #36
            #34, #36 -> Zip
            -> InputMapping(Selector=Item1, Address(Selector=Item1), Value(Selector=Item2))
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=55, PayloadType=S16, Value=255))
            -> MulticastSubject HarpLoadCellsCommands

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Operation.LoadCellOffset)
            -> Merge
            -> ElementIndex => #44
            -> MemberSelector(Selector=Index) => #45
            #44 -> MemberSelector(Selector=Value) => #46
            #45, #46 -> Zip
            -> MulticastSubject OffsetLoadCellChannel => #48
            SubscribeSubject HarpLoadCellsEvents
            -> Take(Count=1) => #50
            #48, #50 -> SubscribeWhen

        Annotation(Text="")
        -> GroupWorkflow HarpTimestampGenerator3
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpClkGenCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTimestampGeneratorGen3.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
            -> PublishSubject HarpClkGenEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
            -> PublishSubject HarpClkGenHeartBeat

            SubscribeSubject HarpClkGenHeartBeat => #8
            SubscribeSubject StartExperiment => #9
            #8, #9 -> Zip => #10
            Annotation ForceRegisterDump(Text="") => #11
            #10, #11 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpClkGenCommands

    GroupWorkflow Cameras
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera0.FrameRate)
        -> Take(Count=1)
        -> AsyncSubject CameraFrameRate

        SubscribeSubject CameraFrameRate
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #9
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> Condition => #13
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject CameraTriggers

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera0)
        -> PropertyMapping
          ExposureTime(Selector=Exposure)
          Gain(Selector=Gain)
          Binning(Selector=Binning)
          SerialNumber(Selector=SerialNumber)
          ColorProcessing(Selector=ColorProcessing)
        -> BciSpinnakerCapture(Index=nil, SerialNumber=23381093, ColorProcessing=Default, ExposureTime=2000, Gain=0, Binning=1, Gamma=0.4, ImageSize(Width=1420, Height=1080)) => #20
        SubscribeSubject CameraTriggers => #21
        #20, #21 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject Camera0FrameEvent

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera1)
        -> PropertyMapping
          ExposureTime(Selector=Exposure)
          Gain(Selector=Gain)
          Binning(Selector=Binning)
          SerialNumber(Selector=SerialNumber)
          ColorProcessing(Selector=ColorProcessing)
        -> BciSpinnakerCapture(Index=nil, SerialNumber=MISSING, ColorProcessing=Default, ExposureTime=1000, Gain=0, Binning=1, Gamma=0.4, ImageSize(Width=1420, Height=1080)) => #28
        SubscribeSubject CameraTriggers => #29
        #28, #29 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject Camera1FrameEvent => #32
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera1)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #35
        #32, #35 -> SubscribeWhen

    GroupWorkflow Manipulator
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=ZaberManipulator)
        -> PropertyMapping(PortName(Selector=ComPort))
        -> AllenNeuralDynamics.Zaber.CreateZaberDevice(Name=ZaberMotor, PortName=COM10)
        -> BehaviorSubject Manipulator

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=ZaberManipulator.GenericCommands)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Merge
        -> SelectMany SendMessages
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Msg

            SubscribeSubject Msg
            -> Condition NotHasAxis?
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> Equal(Operand=WorkflowProperty<BciNoMovementDataSchema.Rig.Axis>(Value=_0))
                -> WorkflowOutput
            -> MemberSelector(Selector=Command)
            -> AllenNeuralDynamics.Zaber.GenericCommand(Axis=nil) => #6
            SubscribeSubject Msg
            -> Condition HasAxis?
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> Equal(Operand=WorkflowProperty<BciNoMovementDataSchema.Rig.Axis>(Value=_0))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Command) => #9
            SubscribeSubject Msg
            -> Condition HasAxis?
                WorkflowInput Source1
                -> MemberSelector(Selector=Axis)
                -> Equal(Operand=WorkflowProperty<BciNoMovementDataSchema.Rig.Axis>(Value=_0))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Axis)
            -> InputMapping(Value(Selector=value__))
            -> IntProperty(Value=1)
            -> PropertyMapping(Axis) => #15
            #9, #15 -> AllenNeuralDynamics.Zaber.GenericCommand(PortName=ZaberMotor, Axis=2) => #16
            #6, #16 -> Merge
            -> WorkflowOutput
        -> BehaviorSubject ManipulatorResponses
        -> DelaySubscription(DueTime=PT1S)

        BehaviorSubject<System.Reactive.Unit> HomingRoutine
        -> CreateObservable HomingRoutine
            WorkflowInput Source1
            -> AllenNeuralDynamics.Zaber.Home(PortName=ZaberMotor, Axis=nil)
            -> AllenNeuralDynamics.Zaber.WaitUntilIdle(PortName=ZaberMotor, Axis=nil)
            -> WorkflowOutput
        -> Switch
        -> BehaviorSubject IsHomed
        -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
        -> MulticastSubject Force3dManipulatorPosition

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=ZaberManipulator)
        -> MemberSelector(Selector=SpoutAxis)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: byte(it)
        -> InputMapping(Selector=it, Value(Selector=it))
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> AsyncSubject ManipulatorSpoutAxis

        BehaviorSubject<System.Reactive.Unit> StopZaber
        -> AllenNeuralDynamics.Zaber.Stop(PortName=ZaberMotor, Axis=nil)

        BehaviorSubject<OpenCV.Net.Point3d> Force3dManipulatorPosition => #28
        -> MemberSelector(Selector=X)
        -> AllenNeuralDynamics.Zaber.MoveAbsolute(PortName=ZaberMotor, Axis=1, Velocity=nil, Acceleration=nil) => #30
        #28 -> MemberSelector(Selector=Y)
        -> AllenNeuralDynamics.Zaber.MoveAbsolute(PortName=ZaberMotor, Axis=2, Velocity=nil, Acceleration=nil) => #32
        #28 -> MemberSelector(Selector=Z)
        -> AllenNeuralDynamics.Zaber.MoveAbsolute(PortName=ZaberMotor, Axis=3, Velocity=nil, Acceleration=nil) => #34
        #30, #32, #34 -> Zip

        BehaviorSubject<System.Single> MoveSpoutAbsolute => #36
        SubscribeSubject ManipulatorSpoutAxis
        -> PropertyMapping(Axis) => #38
        #36, #38 -> AllenNeuralDynamics.Zaber.MoveAbsolute(PortName=ZaberMotor, Axis=1, Velocity=nil, Acceleration=nil)
        -> PublishSubject SpoutPositionInstruction

GroupWorkflow OperationControl
    GroupWorkflow LoadCellProcessing
        SubscribeSubject LoadCellsData => #0
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Operation.LoadCellIndex)
        -> PropertyMapping(Value) => #4
        #1, #4 -> Index(Operand=IntProperty(Value=0)) => #5
        #0 -> MemberSelector(Selector=Seconds) => #6
        #5, #6 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject LoadCellData

        SubscribeSubject LoadCellData => #10
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToDouble => #12
          Expression: double(it)
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=NoMovementControl)
        -> MemberSelector(Selector=LowPassCutOff)
        -> PropertyMapping(Cutoff1) => #16
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=NoMovementControl)
        -> MemberSelector(Selector=HighPassCutOff)
        -> PropertyMapping(Cutoff2) => #20
        #12, #16, #20 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=50, Cutoff2=0.001, KernelLength=60, FilterType=BandPass)
        -> Bonsai.Dsp.Abs => #22
        #10 -> MemberSelector(Selector=Seconds) => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject MovementSignal

    GroupWorkflow BciProcessing
        SubscribeSubject BciSignal => #0
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform AdcUnitsToVoltage => #2
          Expression: ((it * 5.0) / 3972.0)
        #0 -> MemberSelector(Selector=Seconds) => #3
        #2, #3 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PostBciSignal

    GroupWorkflow BciModeToggling
        BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject BciModeEnabled

        SubscribeSubject BciModeEnabled => #3
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #6
        #3 -> Condition => #7
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=BciControl.Gain) => #9
        #7, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #11
        #6, #11 -> Merge
        -> MulticastSubject BciGain

        SubscribeSubject BciGain
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=BciGain)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PassiveGain
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PassiveGain)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject BciModeEnabled
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=BciModeEnabled)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow SpoutControl => #3
        BehaviorSubject<System.Double> SpoutAddDisplacement

        BehaviorSubject<System.Double> SpoutGoToPosition
        -> CreateObservable Accumulate
            WorkflowInput<System.Double> Source1
            -> Take(Count=1)
            -> AsyncSubject InitialPosition

            SubscribeSubject InitialPosition
            -> Take(Count=1) => #4
            SubscribeSubject SpoutAddDisplacement
            -> Skip(Count=1) => #6
            SubscribeSubject InitialPosition => #7
            #6, #7 -> Scan => #8
                WorkflowInput Source1
                -> MemberSelector(Selector="Accumulation,Value")
                -> Add
                -> WorkflowOutput
            #4, #8 -> Concat
            -> WorkflowOutput
        -> Switch
        -> MulticastSubject MoveSpoutAbsolute

        Unit
        -> MulticastSubject GoToInitialPosition

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=ManipulatorResetPosition) => #8
        SubscribeSubject ManipulatorSpoutAxis => #9
        #8, #9 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression:
            new(
            Item1 as ResetPosition,
            Item2 as ManipulatorSpoutAxis)
        -> Condition X
            WorkflowInput Source1
            -> MemberSelector(Selector=ManipulatorSpoutAxis) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=ResetPosition.X) => #13
        #11 -> Condition Y
            WorkflowInput Source1
            -> MemberSelector(Selector=ManipulatorSpoutAxis) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=ResetPosition.Y) => #15
        #11 -> Condition Z
            WorkflowInput Source1
            -> MemberSelector(Selector=ManipulatorSpoutAxis) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=ResetPosition.Z) => #17
        #13, #15, #17 -> Merge
        -> BehaviorSubject ClosePosition

        SubscribeSubject ClosePosition => #20
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=FarPositionOffset)
        -> Bonsai.Dsp.Abs => #23
        #20, #23 -> CombineLatest
        -> Subtract
        -> BehaviorSubject FarPosition

        BehaviorSubject<System.Reactive.Unit> GoToInitialPosition => #27
        SubscribeSubject FarPosition => #28
        #27, #28 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject SpoutGoToPosition
    SubscribeSubject Manipulator
    -> MemberSelector(Selector=IsOpen) => #5
    #3, #5 -> SubscribeWhen

GroupWorkflow TaskLogic => #14
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=InterTrialInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.5S, Period=PT0S)
    -> SelectMany SetPreTrial
        WorkflowInput Source1
        -> Unit
        -> Take(Count=1)
        -> MulticastSubject GoToInitialPosition
        -> WorkflowOutput
    -> SelectMany CheckBaseline => #6
        GroupWorkflow BciBaseline => #0
            SubscribeSubject PostBciSignal => #0
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject BciBaselineThreshold
            -> PropertyMapping(Value) => #3
            #1, #3 -> LessThan(Operand=WorkflowProperty<System.Int16>(Value=1))
            -> DistinctUntilChanged => #5
            #0 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #8
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=LowActivityTime)
            -> PropertyMapping(TimeBelowThreshold) => #11
            #8, #11 -> CreateObservable WaitBaseline
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject PostBciSignal
                -> MemberSelector(Selector=Seconds) => #4
                SubscribeSubject This
                -> MemberSelector(Selector=Seconds) => #6
                #4, #6 -> CombineLatest
                -> Subtract => #8
                ExternalizedMapping(Value(DisplayName=TimeBelowThreshold)) => #9
                #8, #9 -> GreaterThan(Operand=DoubleProperty(Value=1))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject This
                -> MemberSelector(Selector=Value) => #14
                #12, #14 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Switch => #13
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject BciModeEnabled
            -> BitwiseNot
            -> Condition => #20
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #17, #20 -> Merge
            -> WorkflowOutput
        GroupWorkflow MovementBaseline => #1
            SubscribeSubject MovementSignal => #0
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject NoMovementBaselineThreshold
            -> PropertyMapping(Value) => #3
            #1, #3 -> LessThan(Operand=DoubleProperty(Value=20000))
            -> DistinctUntilChanged => #5
            #0 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #8
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> PropertyMapping(TimeBelowThreshold) => #11
            #8, #11 -> CreateObservable WaitBaseline
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject PostBciSignal
                -> MemberSelector(Selector=Seconds) => #4
                SubscribeSubject This
                -> MemberSelector(Selector=Seconds) => #6
                #4, #6 -> CombineLatest
                -> Subtract => #8
                ExternalizedMapping(Value(DisplayName=TimeBelowThreshold)) => #9
                #8, #9 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject This
                -> MemberSelector(Selector=Value) => #14
                #12, #14 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Switch => #13
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #17 -> Merge
            -> WorkflowOutput
        #0, #1 -> CombineLatest
        -> BitwiseAnd
        -> Condition BothBelow? => #4
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SuccessfulBaseline)
        -> MulticastSubject SoftwareEvent => #6
        #6, #4 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=CheckBaseline)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvent
    -> Condition WaitForMicroscope
        WorkflowInput Source1 => #0
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Skip2pHandshake)
        -> BitwiseNot => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> SelectMany WaitToStartMicroscope => #8
        SubscribeSubject MicroscopeArmed
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject MicroscopeStart => #3
        ExternalizedMapping(TimeOut(DisplayName=MicroscopeTimeOut)) => #4
        #3, #4 -> SelectMany WaitForMicoscope => #5
            SubscribeSubject MicroscopeArmed
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=WaitMicroscopeTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds => #8
              Expression: TimeSpan.FromSeconds(it)
            ExternalizedMapping(Value(DisplayName=TimeOut)) => #9
            #8, #9 -> Add(Operand=TimeSpanProperty(Value=PT5S))
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S)
            -> AllenNeuralDynamics.Core.ThrowException(Message="Microscope is not responding!")
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=WaitMicroscopeTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0S, Period=PT0S) => #10
        #5, #10 -> Zip
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=WaitMicroscope)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvent
    #6 -> Condition Skip2pHandshake => #9
        WorkflowInput Source1 => #0
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Skip2pHandshake) => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    #8, #9 -> Merge
    -> SelectMany Response => #11
        SubscribeSubject MoveSpoutAbsolute => #0
        SubscribeSubject ClosePosition
        -> PropertyMapping(Value) => #2
        #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=800000))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ResponseLocked)
        -> MulticastSubject SoftwareEvent => #7
        SubscribeSubject ClosePosition
        -> PropertyMapping(Value) => #9
        #7, #9 -> DoubleProperty(Value=800000)
        -> MulticastSubject SpoutGoToPosition
        -> BooleanProperty(Value=true) => #12
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=MaxTrialDuration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT20S, Period=PT0S)
        -> BooleanProperty(Value=false) => #18
        #12, #18 -> Merge => #19
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ResponseOutcome)
        -> MulticastSubject SoftwareEvent => #21
        #21, #19 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        GroupWorkflow TriggerAudio
            IntProperty(Value=1)
            -> Take(Count=1)
            -> MulticastSubject AudioTrigger => #2
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=EnableSoundOnRewardZoneEntry)
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #2, #5 -> SubscribeWhen
            -> WorkflowOutput

        SubscribeSubject PostBciSignal
        -> MemberSelector(Selector=Value) => #28
        SubscribeSubject BciGain
        -> PropertyMapping(RangeMax) => #30
        #28, #30 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0, RescaleType=Linear)
        -> Condition IsBciEnabled? => #32
            SubscribeSubject BciModeEnabled
            -> WorkflowOutput
        SubscribeSubject MovementSignal
        -> MemberSelector(Selector=Value) => #34
        SubscribeSubject PassiveGain
        -> PropertyMapping(Value) => #36
        #34, #36 -> DoubleProperty(Value=20) => #37
        #32, #37 -> Merge
        -> Condition GateDisplacement
            SubscribeSubject GateDisplacement
            -> WorkflowOutput
        -> MulticastSubject SpoutAddDisplacement

        BooleanProperty(Value=true)
        -> BehaviorSubject GateDisplacement

        SubscribeSubject MovementSignal
        -> MemberSelector(Selector=Value) => #44
        SubscribeSubject NoMovementBaselineThreshold
        -> PropertyMapping(Value) => #46
        #44, #46 -> GreaterThan(Operand=DoubleProperty(Value=20000))
        -> DistinctUntilChanged => #48
        -> Condition IsMovement
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #50
        #48 -> Condition IsNotMoving => #51
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=PunishOnMovementDuration)
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime) => #55
        #51, #55 -> Delay(DueTime=PT0.3S)
        -> BooleanProperty(Value=true) => #57
        #50, #57 -> Merge
        -> Repeat
        -> MulticastSubject GateDisplacement
    -> Condition Success?
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany WaitForLick => #13
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=WaitForLick) => #1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany WaitForLick => #3
            SubscribeSubject LickEvent
            -> BooleanProperty(Value=true) => #1
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=LickResponseTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S, Period=PT0S)
            -> BooleanProperty(Value=false) => #7
            #1, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #1 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #6
        #3, #6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition IsLick
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany DeliverReward => #15
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject TriggerValve => #2
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=RewardConsumeTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #6
        #2, #6 -> Delay(DueTime=PT0S)
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        IntProperty(Value=2)
        -> Take(Count=1)
        -> MulticastSubject AudioTrigger
    #13 -> BitwiseNot
    -> Condition IsTimeOut => #17
        WorkflowInput Source1
        -> WorkflowOutput
    #11 -> BitwiseNot
    -> Condition IsFail => #19
        WorkflowInput Source1
        -> WorkflowOutput
    #15, #17, #19 -> Merge
    -> Unit
    -> MulticastSubject MicroscopeStop
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TrialOutcome)
    -> MulticastSubject SoftwareEvent
    -> Take(Count=1)
    -> Repeat
SubscribeSubject EndExperiment => #15
#14, #15 -> TakeUntil => #16
SubscribeSubject StartExperiment => #17
#16, #17 -> SubscribeWhen

Defer Logging => #19
    GroupWorkflow HarpLogging
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.FilterVisibility
        -> Harp.Behavior.GroupByRegister => #2
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Behavior.harp, Extension=bin)
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.Harp.MessageWriter
          FileName=C:/Data/test-subject/20231220T155631/Behavior.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterVisibility
        -> Harp.LoadCells.GroupByRegister => #8
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=LoadCells.harp, Extension=bin)
        -> PropertyMapping(FileName) => #10
        #8, #10 -> Bonsai.Harp.MessageWriter
          FileName=C:/Data/test-subject/20231220T155631/LoadCells.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

        SubscribeSubject HarpClkGenEvents
        -> Harp.TimestampGenerator3.FilterVisibility
        -> Harp.TimestampGeneratorGen3.GroupByRegister => #14
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=TimestampGenerator.harp, Extension=bin)
        -> PropertyMapping(FileName) => #16
        #14, #16 -> Bonsai.Harp.MessageWriter
          FileName=C:/Data/test-subject/20231220T155631/TimestampGenerator.harp/Register_.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil

    GroupWorkflow Camera
        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
          SubjectName=LoggingRootPath
          LogName=Camera0
          EncodingFrameRate=400
          VideoExtension=mp4
          MetadataExtension=csv
          Codec="-vcodec h264_nvenc -crf: 23 -threads 4"
        -> Take(Count=1)
        -> AsyncSubject Camera0LoggerPath

        IncludeWorkflow
          Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
          SubjectName=LoggingRootPath
          LogName=Camera1
          EncodingFrameRate=400
          VideoExtension=mp4
          MetadataExtension=csv
          Codec="-vcodec h264_nvenc -crf: 23 -threads 4"
        -> Take(Count=1)
        -> AsyncSubject Camera1LoggerPath

        SubscribeSubject Camera0FrameEvent => #6
        SubscribeSubject Camera0LoggerPath
        -> MemberSelector(Selector=Metadata)
        -> PropertyMapping(FileName) => #9
        #6, #9 -> Bonsai.IO.CsvWriter
          FileName=C:/Data/test-subject/20231220T155631/Camera0/Metadata.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
          Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp"
        -> MemberSelector(Selector=Value.Image) => #11
        SubscribeSubject Camera0LoggerPath
        -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #13
        #11, #13 -> Bonsai.FFmpeg.VideoWriter
          FileName=C:/Data/test-subject/20231220T155631/Camera0/Video.mp4
          Suffix=None
          Overwrite=false
          FrameRate=400
          OutputArguments="-vcodec h264_nvenc -crf: 23 -threads 4"

        SubscribeSubject Camera1FrameEvent => #15
        SubscribeSubject Camera1LoggerPath
        -> MemberSelector(Selector=Metadata)
        -> PropertyMapping(FileName) => #18
        #15, #18 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
        -> MemberSelector(Selector=Value.Image) => #20
        SubscribeSubject Camera1LoggerPath
        -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #22
        #20, #22 -> Bonsai.FFmpeg.VideoWriter(FileName=C:\Users\bruno.cruz\Desktop\test.mp4, Suffix=None, Overwrite=false, FrameRate=30, OutputArguments="") => #23
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Camera1)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #26
        #23, #26 -> SubscribeWhen

    GroupWorkflow SoftwareEvent
        SubscribeSubject SoftwareEvent => #0
        SubscribeSubject HarpTimestampSource => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath)
        -> WorkflowOutput

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> GroupWorkflow ModifySchema
            WorkflowInput Source1
            -> BciNoMovementDataSchema.Session.SerializeToJson
            -> BciNoMovementDataSchema.Session.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.Session.BciNoMovementSession>) => #2
            SubscribeSubject Repository
            -> MemberSelector(Selector=Head.Tip.Sha) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddHash
              Expression: it.Item1.set_CommitHash(it.Item2)
            -> MemberSelector(Selector=Item1) => #7
            SubscribeSubject RngSeedValue => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddRngSeedValue
              Expression: it.Item1.set_RngSeed(it.Item2)
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> BciNoMovementDataSchema.Session.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Subject, DeviceName=Config, Extension=json)

        SubscribeSubject TaskLogicSchema
        -> BciNoMovementDataSchema.TaskLogic.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=TaskLogic, DeviceName=Config, Extension=json)

        SubscribeSubject RigSchema
        -> BciNoMovementDataSchema.Rig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Rig, DeviceName=Config, Extension=json)

    GroupWorkflow Logs
        SubscribeSubject EndExperiment
        -> StringProperty(Value=ExperimentCompleted)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> AllenNeuralDynamics.Core.Logging.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=EndSession, DeviceName=config, Extension=json)

    GroupWorkflow Operation
        SubscribeSubject SpoutPositionInstruction => #0
        SubscribeSubject HarpTimestampSource => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogCsv.bonsai
          LogName=SpoutPosition
          DeviceName=Operation
          Extension=csv
          OmitHeader=false
          Delimiter=nil
          SubjectName=LoggingRootPath
        -> WorkflowOutput
SubscribeSubject EndExperiment
-> Delay(DueTime=PT0.5S) => #21
#19, #21 -> TakeUntil => #22
SubscribeSubject StartLogging => #23
#22, #23 -> SubscribeWhen

BehaviorSubject<System.Reactive.Unit> EndExperiment
-> Delay(DueTime=PT2S)
-> SelectMany EndRoutine
    Unit
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #4
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemoteDataPath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #8
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #10
    #8, #10 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #13
    #4, #13 -> AllenNeuralDynamics.Core.StartRobocopy => #14
      Source=C:/Data/test-subject/20231220T155230
      Destination=C:/DataRemote/test-subject/20231220T155230
      CreateLog=true
      Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee"
      ProcessWindowStyle=Normal
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemoteDataPath)
    -> Condition NotNull => #17
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    #14, #17 -> SubscribeWhen
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput

GroupWorkflow ZaberGUI
    AllenNeuralDynamics.Core.Design.PushButton(Label=ClosePosition) => #0
    SubscribeSubject ClosePosition
    -> PropertyMapping(Value) => #2
    #0, #2 -> FloatProperty(Value=0)
    -> MulticastSubject SpoutGoToPosition
    AllenNeuralDynamics.Core.Design.PushButton(Label=FarPosition) => #5
    SubscribeSubject FarPosition
    -> PropertyMapping(Value) => #7
    #5, #7 -> FloatProperty(Value=0)
    -> MulticastSubject SpoutGoToPosition
    #0 -> VisualizerMapping => #10
    #5 -> VisualizerMapping => #11
    AllenNeuralDynamics.Core.Design.PushButton(Label=Home) => #12
    -> VisualizerMapping => #13
    #10, #11, #13 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #15
    AllenNeuralDynamics.Core.Design.PushButton(Label=-X) => #16
    -> VisualizerMapping => #17
    AllenNeuralDynamics.Core.Design.PushButton(Label=+X) => #18
    -> VisualizerMapping => #19
    AllenNeuralDynamics.Core.Design.PushButton(Label=-Y) => #20
    -> VisualizerMapping => #21
    AllenNeuralDynamics.Core.Design.PushButton(Label=+Y) => #22
    -> VisualizerMapping => #23
    AllenNeuralDynamics.Core.Design.PushButton(Label=-Z) => #24
    -> VisualizerMapping => #25
    AllenNeuralDynamics.Core.Design.PushButton(Label=+Z) => #26
    -> VisualizerMapping => #27
    #17, #19, #21, #23, #25, #27 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #29
    AllenNeuralDynamics.Core.Design.PropertyGridSource
    -> VisualizerMapping => #31
    AllenNeuralDynamics.Core.Design.PushButton(Label=SaveNewClosePosition)
    -> BehaviorSubject SaveNewClosePosition
    -> VisualizerMapping => #34
    #29, #31, #34 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
      ColumnCount=2
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=3), CellSpan(ColumnSpan=1, RowSpan=4), CellSpan(ColumnSpan=1, RowSpan=1))
    -> VisualizerMapping => #36
    #15, #36 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=0.3), RowStyle(SizeType=Percent, Height=0.7)), CellSpans="")
    -> WorkflowOutput
    #12 -> Unit
    -> MulticastSubject HomingRoutine
    #16 -> StringProperty(Value=-X) => #41
    #18 -> StringProperty(Value=+X) => #42
    #20 -> StringProperty(Value=-Y) => #43
    #22 -> StringProperty(Value=+Y) => #44
    #24 -> StringProperty(Value=-Z) => #45
    #26 -> StringProperty(Value=+Z) => #46
    #41, #42, #43, #44, #45, #46 -> Merge
    -> BehaviorSubject GuiDisplaceManipulator

    ExternalizedMapping(Value(DisplayName=X))
    -> DoubleProperty(Value=10) => #50
    ExternalizedMapping(Value(DisplayName=Y))
    -> DoubleProperty(Value=10) => #52
    ExternalizedMapping(Value(DisplayName=Z))
    -> DoubleProperty(Value=10) => #54
    #50, #52, #54 -> CombineLatest
    -> InputMapping(X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3)) => #56
    Source2=#56 -> Bonsai.Vision.CreatePoint3d(X=10, Y=10, Z=10)
    -> BehaviorSubject CurrentManipulatorDisplacements

    SubscribeSubject GuiDisplaceManipulator => #59
    SubscribeSubject CurrentManipulatorDisplacements => #60
    #59, #60 -> WithLatestFrom => #61
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetAxisAndDirection => #62
      Expression: (Item1[0] == '-' ? -1.0 : 1.0) * (Item1[1] == 'X' ? Item2.X : 0)
    #61 -> Bonsai.Scripting.Expressions.ExpressionTransform GetAxisAndDirection => #63
      Expression: (Item1[0] == '-' ? -1.0 : 1.0) * (Item1[1] == 'Y' ? Item2.Y : 0)
    #61 -> Bonsai.Scripting.Expressions.ExpressionTransform GetAxisAndDirection => #64
      Expression: (Item1[0] == '-' ? -1.0 : 1.0) * (Item1[1] == 'Z' ? Item2.Z : 0)
    #62, #63, #64 -> Zip
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
    -> Bonsai.Vision.CreatePoint3d(X=-0, Y=-0, Z=-10)
    -> SelectMany Increment
        WorkflowInput Source1 => #0
        SubscribeSubject Force3dManipulatorPosition
        -> Take(Count=1) => #2
        #0, #2 -> Zip
        -> Add
        -> WorkflowOutput
    -> MulticastSubject Force3dManipulatorPosition

    GroupWorkflow OverrideDefaultPosition
        SubscribeSubject SaveNewClosePosition => #0
        SubscribeSubject Force3dManipulatorPosition => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject TaskLogicSchema
        -> GroupWorkflow "Clone()" => #5
            WorkflowInput Source1
            -> BciNoMovementDataSchema.TaskLogic.SerializeToJson
            -> BciNoMovementDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.TaskLogic.BciNoMovementTaskLogic>)
            -> WorkflowOutput
        #3, #5 -> WithLatestFrom
        -> MemberSelector(Selector="Item2,Item1")
        -> ModifyManipulatorResetPosition
        -> MulticastSubject TaskLogicSchema
        -> BciNoMovementDataSchema.TaskLogic.SerializeToJson => #10
        SubscribeSubject TaskLogicSchemaPath
        -> PropertyMapping(Path) => #12
        #10, #12 -> Bonsai.IO.WriteAllText(Path=..\local\TaskLogic\bci_no_movement_task_logic.json, Overwrite=true, Append=false)
        -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #32
GroupWorkflow UILogic
    AllenNeuralDynamics.Core.Design.ToggleButton(CheckedLabel="Stop Session!", UncheckedLabel="Start Session!", IsInitiallyChecked=false) => #0
    -> MulticastSubject TaskRunningState
    AllenNeuralDynamics.Core.Design.ToggleButton(CheckedLabel="Bci Mode Enabled", UncheckedLabel="Movement Mode Enabled", IsInitiallyChecked=true) => #2
    -> MulticastSubject BciModeEnabled
    #0 -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.ToggleButtonVisualizer>) => #4
    #2 -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.ToggleButtonVisualizer>) => #5
    #4, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SessionControl(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #34
GroupWorkflow Visualization
    SubscribeSubject PostBciSignal => #0
    SubscribeSubject BciBaselineThreshold => #1
    #0, #1 -> CombineLatest
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Item1.Seconds, ValueSelector="Item1.Value,Item2", SymbolType=None, LineWidth=2, Capacity=nil, Min=-0.5, Max=4)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #4
    SubscribeSubject MovementSignal => #5
    SubscribeSubject NoMovementBaselineThreshold => #6
    #5, #6 -> CombineLatest
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Item1.Seconds, ValueSelector="Item1.Value,Item2", SymbolType=None, LineWidth=2, Capacity=nil, Min=-3000, Max=32000)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #9
    SubscribeSubject Camera0FrameEvent
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #13
    SubscribeSubject Camera1FrameEvent
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #17
    SubscribeSubject SoftwareEvent => #18
    SubscribeSubject HarpTimestampSource => #19
    #18, #19 -> WithLatestFrom => #20
    -> MemberSelector(Selector=Item1) => #21
    -> MemberSelector(Selector=Name) => #22
    #20 -> MemberSelector(Selector=Item2) => #23
    #21 -> AllenNeuralDynamics.Core.Logging.SerializeToJson => #24
    #22, #23, #24 -> Zip
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #26
    SubscribeSubject SpoutPositionInstruction => #27
    SubscribeSubject ClosePosition => #28
    SubscribeSubject FarPosition => #29
    #27, #28, #29 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #31
      Expression: new(Item1 as Position, Item2 as Close, Item3 as Far)
    SubscribeSubject HarpTimestampSource => #32
    #31, #32 -> WithLatestFrom
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Item2, ValueSelector="Item1.Position,Item1.Close,Item1.Far", SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #35
    #4, #9, #13, #17, #26, #35 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Plots(ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #36
#32, #34, #36 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
  ColumnCount=1
  RowCount=3
  ColumnStyles=""
  RowStyles(RowStyle(SizeType=Percent, Height=0.2), RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.7))
  CellSpans=""
